PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant': '000', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = seq_teaching_exp
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Routines
  Routine Raven_Matrices
    TextComponent rv_txt1
      disabled = True
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 600.0
      text = Pre-training phase
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    ButtonComponent rv_btn1
      bold = True
      color = black
      disabled = True
      fillColor = white
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.45)
      size = [0.2,0.1]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 600.0
      text = Next
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  Routine MERGE_TEST
    CodeComponent merge_test_setup
      Code Type = Auto->JS
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      Begin Routine:
        # Begin Routine
        cntCompared = 0
      Each Frame:
        # Each Frame
        if mouse.isPressedIn(merge_test_compare):
            compare(merge_test_scale,merge_test_input,merge_test_scale_instr,merge_test_scale_left,merge_test_scale_right)
    VariableComponent merge_test_input
      startRoutineValue = input
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    TextComponent merge_test_scale_instr
      letterHeight = 0.02
      pos = (-0.65,0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text = Enter the labels of item in the boxes
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    TextComponent merge_test_ans_instr
      letterHeight = 0.03
      pos = (-0.25, -0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text = Enter your answer like this (X,X,X,X,X,X,X,X, ... ,X)
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    TextComponent merge_test_instr
      letterHeight = 0.03
      pos = (0.65, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
      wrapWidth = 0.4
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      text:
        Use the scale to put the fruits in groups of two. Sort them lightest first within the group!

        Don't give up and try your best to write the fruit labels down in correct order.
    ButtonComponent merge_test_btn
      bold = True
      color = black
      fillColor = white
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.5, -0.35)
      size = [0.24,0.1]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 300.0
      text = Submit
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    TextboxComponent merge_test_scale_right
      anchor = top-center
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.03
      pos = (-0.55, 0.4)
      size = (0.1,0.07)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    TextboxComponent merge_test_scale_left
      anchor = top-center
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.03
      pos = (-0.75, 0.4)
      size = (0.1, 0.07)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    TextboxComponent merge_test_compare
      anchor = top-center
      bold = False
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.03
      pos = (-0.65, -0.02)
      size = (0.16,0.07)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text = Compare
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    TextboxComponent merge_test_res
      anchor = top-center
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.05
      pos = (-0.25, -0.3)
      size = (0.7,0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent merge_test_sep
      image = materials/merge_sort/demo_imgs/white_BG.png
      pos = (0, -0.15)
      size = (1.5,0.005)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent merge_test
      image [set every repeat] = $img_path
      pos = (0, 0.2)
      size = (0.8, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent merge_test_scale
      image = $scaleEqPath
      pos = (-0.65, 0.15)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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  Routine SORT_TRAIN
    CodeComponent sort_train_setup
      Code Type = Auto->JS
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      Begin Routine:
        # Begin Routine

        items = []
        mc_order = []
        submitted = -1

        movingItem = None
        (x, y) = sort_train_board.pos
        (w,h) = sort_train_board.size
        top = y+h/2
        bot = y-h/2
        left = x-w/2
        right = x+w/2

        cntCompared = 0
      Each Frame:
        # Each Frame

        if items == []:
            items = enableImageComponents(SORT_TRAINComponents,sort_train_input,sort_train_path_base)

        if mc_order == []:
            mc_order = getCorrectMCOrder(sort_train_mc_path_1,sort_train_mc_path_2)

        for item in items:
            if mouse.isPressedIn(item) and movingItem is None:
                movingItem = item

        movingItem = moveItem(mouse, movingItem)

        if mouse.isPressedIn(sort_train_compare):
            compare(sort_train_scale,sort_train_input,sort_train_scale_instr,sort_train_scale_left,sort_train_scale_right)
    VariableComponent sort_train_mc_path_2
      startRoutineValue = mc_path_2
      startVal [time (s)] = 0
      stopVal [duration (s)] = 300
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    VariableComponent sort_train_mc_path_1
      startRoutineValue = mc_path_1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 300
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    VariableComponent sort_train_path_base
      startRoutineValue = img_path_base
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    VariableComponent sort_train_input
      startRoutineValue = input
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    TextComponent sort_train_ans_instr
      letterHeight = 0.03
      pos = (-0.3, -0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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      text:
        Please SELECT the arrangement that has the correct fruit(s) in its YELLOW cell(s):
    TextComponent sort_train_scale_instr
      letterHeight = 0.02
      pos = (-0.65,0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text = Enter the labels of item in the boxes
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    TextComponent sort_train_instr
      letterHeight = 0.03
      pos = (0.65, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
      wrapWidth = 0.4
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      text:
        The fruits in the box should be sorted such that the leftmost fruits are always the lightest. Remember what you have learned and try to arrange the fruits.

        Do make full use of the scale and there is the whiteboard for you to move fruits around freely. Pick what you think is more likely to be right arrangement.
    ButtonComponent sort_train_btn1
      bold = True
      color = black
      fillColor = white
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.5, -0.25)
      size = [0.24,0.1]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 300.0
      text = Select
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      callback:
        submitted = 0
    ButtonComponent sort_train_btn2
      bold = True
      color = black
      fillColor = white
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.5, -0.4)
      size = [0.24,0.1]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 300.0
      text = Select
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      callback:
        submitted = 1
    TextboxComponent sort_train_scale_right
      anchor = top-center
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.03
      pos = (-0.55, 0.40)
      size = (0.1,0.07)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    TextboxComponent sort_train_scale_left
      anchor = top-center
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.03
      pos = (-0.75, 0.40)
      size = (0.1, 0.07)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    TextboxComponent sort_train_compare
      anchor = top-center
      bold = False
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.03
      pos = (-0.65, -0.02)
      size = (0.16,0.07)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text = Compare
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    ImageComponent sort_train_sep
      image = materials/merge_sort/demo_imgs/white_BG.png
      pos = (0, -0.11)
      size = (1.5,0.005)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent sort_train_board
      image [set every repeat] = materials/merge_sort/demo_imgs/white_BG.png
      pos = (0, 0.2)
      size = (0.8, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent sort_train_mc_1
      image [set every repeat] = $mc_path_1
      pos = (-0.3,-0.25)
      size = (0.6,0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent sort_train_mc_2
      image [set every repeat] = $mc_path_2
      pos = (-0.3, -0.4)
      size = (0.6,0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent sort_train_scale
      image = $scaleEqPath
      pos = (-0.65, 0.15)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent sort_train_ex_1
      pos [set every repeat] = (-0.25, 0.3)
      size = (0.06, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent sort_train_ex_2
      pos [set every repeat] = (-0.20, 0.3)
      size = (0.06, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent sort_train_ex_3
      pos [set every repeat] = (-0.15, 0.3)
      size = (0.06, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent sort_train_ex_4
      pos [set every repeat] = (-0.10, 0.3)
      size = (0.06, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent sort_train_ex_5
      pos [set every repeat] = (-0.05, 0.3)
      size = (0.06, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent sort_train_ex_6
      pos [set every repeat] = (0, 0.3)
      size = (0.06, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent sort_train_ex_7
      pos [set every repeat] = (0.05, 0.3)
      size = (0.06, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent sort_train_ex_8
      pos [set every repeat] = (0.1, 0.3)
      size = (0.06,0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent sort_train_ex_9
      pos [set every repeat] = (0.10,0.3)
      size = (0.06, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent sort_train_ex_10
      pos [set every repeat] = (0.15, 0.3)
      size = (0.06, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent sort_train_ex_11
      pos [set every repeat] = (0.20, 0.3)
      size = (0.06, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent sort_train_ex_12
      pos [set every repeat] = (0.25, 0.3)
      size = (0.06, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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  Routine SORT_TEST
    CodeComponent sort_test_setup
      Code Type = Auto->JS
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      Begin Routine:
        # Begin Routine

        items = []

        movingItem = None
        (x, y) = sort_test_board.pos
        (w,h) = sort_test_board.size
        top = y+h/2
        bot = y-h/2
        left = x-w/2
        right = x+w/2

        cntCompared = 0
      Each Frame:
        # Each Frame

        if items == []:
            items = enableImageComponents(SORT_TESTComponents,sort_test_input,sort_test_path_base)

        for item in items:
            if mouse.isPressedIn(item) and movingItem is None:
                movingItem = item

        movingItem = moveItem(mouse, movingItem)

        if mouse.isPressedIn(sort_test_compare):
            compare(sort_test_scale,sort_test_input,sort_test_scale_instr,sort_test_scale_left,sort_test_scale_right)
    VariableComponent sort_test_path_base
      startRoutineValue = img_path_base
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    VariableComponent sort_test_input
      startRoutineValue = input
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    TextComponent sort_test_ans_instr
      letterHeight = 0.03
      pos = (-0.25, -0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text = Enter your answer like this (X,X,X,X,X,X,X,X, ... ,X)
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    TextComponent sort_test_scale_instr
      letterHeight = 0.02
      pos = (-0.65,0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text = Enter the labels of item in the boxes
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    TextComponent sort_test_instr
      letterHeight = 0.03
      pos = (0.65, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
      wrapWidth = 0.4
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      text:
        In this room, you have to sort a set of fruits from lightest to heaviest. You can still use the scale to for weighting fruits and the sketchboard to move things around.

        Please try your best to record the fruit labels down in correct order.
    ButtonComponent sort_test_btn
      bold = True
      color = black
      fillColor = white
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.5, -0.35)
      size = [0.24,0.1]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 300.0
      text = Submit
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    TextboxComponent sort_test_scale_right
      anchor = top-center
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.03
      pos = (-0.55, 0.4)
      size = (0.1,0.07)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    TextboxComponent sort_test_scale_left
      anchor = top-center
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.03
      pos = (-0.75, 0.4)
      size = (0.1, 0.07)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    TextboxComponent sort_test_compare
      anchor = top-center
      bold = False
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.03
      pos = (-0.65, -0.02)
      size = (0.16,0.07)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text = Compare
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    TextboxComponent sort_test_res
      anchor = top-center
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.05
      pos = (-0.25, -0.3)
      size = (0.7,0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent sort_test_sep
      image = materials/merge_sort/demo_imgs/white_BG.png
      pos = (0, -0.15)
      size = (1.5,0.005)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent sort_test_board
      image [set every repeat] = materials/merge_sort/demo_imgs/white_BG.png
      pos = (0, 0.2)
      size = (0.8, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent sort_test_scale
      image = $scaleEqPath
      pos = (-0.65, 0.15)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent sort_test_ex_1
      pos [set every repeat] = (-0.25, 0.3)
      size = (0.06, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent sort_test_ex_2
      pos [set every repeat] = (-0.20, 0.3)
      size = (0.06, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent sort_test_ex_3
      pos [set every repeat] = (-0.15, 0.3)
      size = (0.06, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent sort_test_ex_4
      pos [set every repeat] = (-0.10, 0.3)
      size = (0.06, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent sort_test_ex_5
      pos [set every repeat] = (-0.05, 0.3)
      size = (0.06, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent sort_test_ex_6
      pos [set every repeat] = (0, 0.3)
      size = (0.06, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent sort_test_ex_7
      pos [set every repeat] = (0.05, 0.3)
      size = (0.06, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent sort_test_ex_8
      pos [set every repeat] = (0.1, 0.3)
      size = (0.06,0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent sort_test_ex_9
      pos [set every repeat] = (0.10,0.3)
      size = (0.06, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent sort_test_ex_10
      pos [set every repeat] = (0.15, 0.3)
      size = (0.06, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent sort_test_ex_11
      pos [set every repeat] = (0.20, 0.3)
      size = (0.06, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent sort_test_ex_12
      pos [set every repeat] = (0.25, 0.3)
      size = (0.06, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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  Routine MERGE_TRAIN
    VariableComponent merge_train_mc_path_2
      startRoutineValue = mc_path_2
      startVal [time (s)] = 0
      stopVal [duration (s)] = 300
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    VariableComponent merge_train_mc_path_1
      startRoutineValue = mc_path_1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 300
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    CodeComponent merge_train_setup
      Code Type = Auto->JS
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      Begin Routine:
        cntCompared = 0
        mc_order = []
        submitted = -1
      Each Frame:
        # Each Frame
        if mc_order == []:
            mc_order = getCorrectMCOrder(merge_train_mc_path_1,merge_train_mc_path_2,merge_train_mc_1,merge_train_mc_2)

        if mouse.isPressedIn(merge_train_compare):
            compare(merge_train_scale,merge_train_input,merge_train_scale_instr,merge_train_scale_left,merge_train_scale_right)
      End Routine:
        repeats = makeScreenShot(repeats)
    VariableComponent merge_train_input
      startRoutineValue = input
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    TextComponent merge_ans_instr
      letterHeight = 0.02
      pos = (0, -0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text = Please SELECT the sequence that has the correct fruit(s) in its YELLOW cell(s):
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    TextComponent merge_train_scale_instr
      letterHeight = 0.02
      pos = (-0.65,0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text = COMPARE weights by typing fruit labels in both LHS and RHS  textboxes
      wrapWidth = 0.3
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    TextComponent merge_train_instr
      letterHeight = 0.03
      pos = (0.65, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
      wrapWidth = 0.4
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      text:
        - Use the scale on the left to COMPARE weights of two fruits by entering their alphabetic labels

        - Try to find how the BLUE STAR arranges the fruits
    ButtonComponent merge_train_btn1
      bold = True
      color = black
      fillColor = white
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.5, -0.25)
      size = [0.24,0.1]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 300.0
      text = Select
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      callback:
        submitted = 0
    ButtonComponent merge_train_btn2
      bold = True
      callback = submitted = 1
      color = black
      fillColor = white
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.5, -0.4)
      size = [0.24,0.1]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 300.0
      text = Select
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    TextboxComponent merge_train_scale_right
      anchor = top-center
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.03
      pos = (-0.55, 0.4)
      size = (0.1,0.07)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    TextboxComponent merge_train_scale_left
      anchor = top-center
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.03
      pos = (-0.75, 0.4)
      size = (0.1, 0.07)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    TextboxComponent merge_train_compare
      anchor = top-center
      bold = False
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.03
      pos = (-0.65, -0.02)
      size = (0.16,0.07)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text = Compare
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    ImageComponent merge_train_sep
      image = materials/merge_sort/demo_imgs/white_BG.png
      pos = (0, -0.11)
      size = (1.5,0.005)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent merge_train
      image [set every repeat] = $img_path
      pos = (0, 0.2)
      size = (0.8, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent merge_train_mc_1
      image [set every repeat] = materials/merge_sort/demo_imgs/white_BG.png
      pos = (-0.3,-0.25)
      size = (0.7,0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent merge_train_mc_2
      image [set every repeat] = materials/merge_sort/demo_imgs/white_BG.png
      pos = (-0.3, -0.4)
      size = (0.7,0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent merge_train_scale
      image = $scaleEqPath
      pos = (-0.65, 0.15)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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  Routine SORT_TRAIN_EXPL
    ButtonComponent sort_train_expl_btn
      bold = True
      color = black
      fillColor = white
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.4, -0.42)
      size = [0.30,0.1]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 300.0
      text = Continue
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    ImageComponent sort_train_expl_sep
      image = materials/merge_sort/demo_imgs/white_BG.png
      pos = (-0.1, 0)
      size = (0.005,0.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent sort_train_expl
      image [set every repeat] = $expl_path
      pos = (0.4, 0.05)
      size = (0.8, 0.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent sort_train_expl_mc_1
      image = materials/merge_sort/demo_imgs/sort_train_ex_2_wrong_submitted.png
      pos = (-0.50,0.25)
      size = (0.6,0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent sort_train_expl_mc_2
      image = materials/merge_sort/demo_imgs/sort_train_ex_2_wrong_submitted.png
      pos = (-0.5, -0.15)
      size = (0.6,0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    TextComponent sort_train_expl_feedback_1
      letterHeight = 0.03
      pos = (-0.50,0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
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    TextComponent sort_train_expl_feedback_2
      letterHeight = 0.03
      pos = (-0.5, -0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    CodeComponent sort_train_expl_setup
      Code Type = Auto->JS
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      Begin Routine:
        if submitted == 0:
            sort_train_expl_feedback_1.text = "Submitted >>> \n"
        elif submitted == 1:
            sort_train_expl_feedback_2.text = "Submitted >>> \n"

        if mc_order == [1,0]:
            sort_train_expl_feedback_1.color = green
            sort_train_expl_feedback_2.color = red
            sort_train_expl_feedback_1.text = sort_train_expl_feedback_1.text + "This answer is correct!"
            sort_train_expl_feedback_2.text = sort_train_expl_feedback_2.text + "This answer is wrong!"
        else:
            sort_train_expl_feedback_1.color = red
            sort_train_expl_feedback_2.color = green
            sort_train_expl_feedback_1.text = sort_train_expl_feedback_1.text + "This answer is wrong!"
            sort_train_expl_feedback_2.text = sort_train_expl_feedback_2.text + "This answer is correct!"

        sort_train_expl_mc_1.image = sort_train_mc_path_1.split(".png")[0] + "_submitted.png"
        sort_train_expl_mc_2.image = sort_train_mc_path_2.split(".png")[0] + "_submitted.png"
  Routine MERGE_TRAIN_EXPL
    ButtonComponent merge_train_expl_btn
      bold = True
      color = black
      fillColor = white
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.35, -0.42)
      size = [0.30,0.1]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 300.0
      text = Continue
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    ImageComponent merge_train_expl_sep
      image = materials/merge_sort/demo_imgs/white_BG.png
      pos = (-0.25, 0)
      size = (0.005,0.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent merge_train_expl
      image [set every repeat] = $expl_path
      pos = (0.35, 0.05)
      size = (1, 0.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent merge_train_expl_mc_1
      image [set every repeat] = materials/merge_sort/demo_imgs/white_BG.png
      pos = (-0.55,0.25)
      size = (0.4,0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent merge_train_expl_mc_2
      image [set every repeat] = materials/merge_sort/demo_imgs/white_BG.png
      pos = (-0.55, -0.15)
      size = (0.4,0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    TextComponent merge_train_expl_feedback_1
      letterHeight = 0.03
      pos = (-0.55,0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
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    TextComponent merge_train_expl_feedback_2
      letterHeight = 0.03
      pos = (-0.55, -0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    CodeComponent merge_train_expl_setup
      Code Type = Auto->JS
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      Begin Routine:
        showExpl(merge_train_expl_feedback_1,merge_train_expl_feedback_2,merge_train_expl_mc_1,merge_train_expl_mc_2,merge_train_mc_path_1,merge_train_mc_path_2)
      End Routine:
        repeats = makeScreenShot(repeats)
  Routine MERGE_INTRO
    TextComponent intro_text_2
      letterHeight = 0.03
      pos = (0, -0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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      text:
        ALICE: BIZZ ... Thank you for coming to help!

        The fruits have different weights. The BLUE STAR is a specific arrangement of fruits from two boxes (ORANGE) into one.

        LEARN and MASTER what the BLUE STAR does. I will first walk you through and you can try it on you own later!
    ButtonComponent intro_btn_2
      bold = True
      color = black
      fillColor = white
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.4)
      size = [0.30,0.1]
      startVal [time (s)] = 1
      stopVal [duration (s)] = 300.0
      text = Continue
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    ImageComponent alice_2
      image = materials/merge_sort/demo_imgs/alice.png
      pos = (-0.2, 0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent merge_example
      image = materials/merge_sort/demo_imgs/merge_train_ex_1.png
      pos = (0.2, 0.2)
      size = (0.5, 0.20)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent door_3
      image = materials/merge_sort/demo_imgs/door.png
      pos = (-0.4, 0.2)
      size = (0.15, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
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    CodeComponent code
      Code Type = Auto->JS
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      End Routine:
        repeats = makeScreenShot(repeats)
  Routine INTRO
    TextComponent intro_text
      letterHeight = 0.03
      pos = (0, -0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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      text:
        Today, you will learn how to help our robot trader friends ALICE & BOB to package fruits for shipment.

        You will visit two warehouses "rooms", in which you will learn individual steps of the process from ALICE and BOB.

        In the end, you can put the skills learned in the rooms together and complete the whole process by yourself!
    ButtonComponent intro_btn
      bold = True
      color = black
      fillColor = white
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.4)
      size = [0.30,0.1]
      startVal [time (s)] = 0
      stopVal [duration (s)] = 300.0
      text = Continue
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    CodeComponent setup
      Code Type = Auto->JS
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      Before Experiment:
        import time
        import random

        sleepTime = 0.2
        mouse = None
        green =  (-0.0039, 1.0000, -1.0000)
        alphabet = ["A","B","C","D","E","F","G","H","I","J","K","L"]
        red = "red"
        white = "white"
        repeats = 0

        scaleEqPath = "materials/merge_sort/demo_imgs/scale_balanced.png"
        scaleLtPath = "materials/merge_sort/demo_imgs/scale_right.png"
        scaleGtPath = "materials/merge_sort/demo_imgs/scale_left.png"

        #scaleEqPath = "materials/merge_sort/demo_imgs/left_eq_right.png"
        #scaleLtPath = "materials/merge_sort/demo_imgs/left_lt_right.png"
        #scaleGtPath = "materials/merge_sort/demo_imgs/left_gt_right.png"

        # Begin Experiment
        def moveItem(mouse, grabbed):
            # Move piece if we already moving that piece
            if grabbed is not None and mouse.isPressedIn(grabbed):
                (u,v) = mouse.getPos()
                if left <= u and u <= right and bot <= v and v <= top:
                    grabbed.pos = (u,v)
                return grabbed
            else:
                # Move newly clicked piece
                for item in items:
                    if mouse.isPressedIn(item) and grabbed is not item:
                        return item

        # compare inputs from scale left and right inputs
        def comparePickedItems(scale,values,leftInput,rightInput):
            if len(leftInput.text) == 0 or len(leftInput.text) == 0:
                raise ValueError()
            elif len(leftInput.text) > 1 or len(leftInput.text) > 1:
                raise TypeError()
            leftLabel = alphabet.index(leftInput.text)
            rightLabel = alphabet.index(rightInput.text)
            leftValue = values[leftLabel]
            rightValue = values[rightLabel]
            if leftValue > rightValue:
                scale.image = scaleGtPath
            elif leftValue < rightValue:
                scale.image = scaleLtPath
            else:
                scale.image = scaleEqPath
            time.sleep(sleepTime)

        def compare(scale,listValues,instr,scaleLeft,scaleRight):
            try:
                comparePickedItems(scale,listValues,scaleLeft,scaleRight)
                instr.text = ""
                instr.color = white
            except ValueError:
                instr.text = "Please provide labels for both LHS and RHS"
                instr.color = red
            except IndexError:
                instr.text = "Please enter an existing item"
                instr.color = red
            except TypeError:
                instr.text = "Please enter labels as single capitals"
                instr.color = red

        # enable image components on white board given an input list to sort
        def enableImageComponents(components,listValues,imagePathBase):
            enabledComponents = []
            for component in components:
                if isinstance(component,visual.ImageStim):
                    exId= component.name.split("_")[-2:]
                    if exId[-2] == "ex":
                        idxStr = exId[-1]
                        if int(idxStr) > len(listValues):
                            component.image = None
                        else:
                            component.image = imagePathBase + "_" + idxStr + ".png"
                            enabledComponents.append(component)
            return enabledComponents

        def getCorrectMCOrder(path1,path2,img1,img2):
            rand = random.randint(0,1)
            order = [rand,1-rand]
            if (path1.split("_")[-1] == "wrong.png" and path2.split("_")[-1] == "correct.png") or (path2.split("_")[-1] == "wrong.png" and path1.split("_")[-1] == "correct.png"):
                if order == [1,0]:
                    img1.image = path1
                    img2.image = path2
                else:
                    img1.image = path2
                    img2.image = path1
                return order
            else:
                raise ValueError("Training multiple choice setup is incorrect!")

        def showExpl(feedback1,feedback2,mc1,mc2,mcPath1,mcPath2):
            # finds which choice user has selected
            feedback1.text = ""
            feedback2.text = ""

            if submitted == 0:
                feedback1.text = "SELECTED >>> \n"
            elif submitted == 1:
                feedback2.text = "SELECTED >>> \n"

            # show user which answer is correct and wrong
            if mc_order == [1,0]:
                feedback1.color = green
                feedback2.color = red
                feedback1.text = feedback1.text + "This answer is correct!"
                feedback2.text = feedback2.text + "This answer is wrong!"

                 # show the selections
                mc1.image = mcPath1.split(".png")[0] + "_selected.png"
                mc2.image = mcPath2.split(".png")[0] + "_selected.png"
            else:
                feedback1.color = red
                feedback2.color = green
                feedback1.text = feedback1.text + "This answer is wrong!"
                feedback2.text = feedback2.text + "This answer is correct!"

                 # show the selections
                mc1.image = mcPath2.split(".png")[0] + "_selected.png"
                mc2.image = mcPath1.split(".png")[0] + "_selected.png"

        def makeScreenShot(repeats):
            win.getMovieFrame()
            win.saveMovieFrames(str(repeats) + '.png')
            return repeats + 1
    MouseComponent mouse
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.0
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    ImageComponent alice
      image = materials/merge_sort/demo_imgs/alice.png
      pos = (-0.2, 0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent bob
      image = materials/merge_sort/demo_imgs/bob.png
      pos = (0.2, 0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent door_1
      image = materials/merge_sort/demo_imgs/door.png
      pos = (-0.4, 0.2)
      size = (0.15, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
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    ImageComponent door_2
      image = materials/merge_sort/demo_imgs/door.png
      pos = (0.4, 0.2)
      size = (0.15, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
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  Routine SORT_INTRO
    TextComponent intro_text_3
      letterHeight = 0.03
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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      text:
        BOB: CLIKKKK ... SOOO GOOooD to see you!

        Let's be ready for some work! Now learn to use the skills that you just got.

        There is enough to warm you up and afterwards you can give your best shot!
    ButtonComponent intro_btn_3
      bold = True
      color = black
      fillColor = white
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.4)
      size = [0.30,0.1]
      startVal [time (s)] = 0
      stopVal [duration (s)] = 300.0
      text = Continue
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    ImageComponent bob_2
      image = materials/merge_sort/demo_imgs/bob.png
      pos = (0.2, 0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent merge_example_2
      image = materials/merge_sort/demo_imgs/sort_example.png
      pos = (-0.2, 0.2)
      size = (0.5, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent door_4
      image = materials/merge_sort/demo_imgs/door.png
      pos = (0.4, 0.2)
      size = (0.15, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
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  Routine FINAL_TEST_1
    CodeComponent final_test_1_setup
      Code Type = Auto->JS
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      Begin Routine:
        # Begin Routine
        cntCompared = 0
      Each Frame:
        # Each Frame
        if mouse.isPressedIn(final_test_1_compare):
            compare(final_test_1_scale,final_test_1_input,final_test_1_scale_instr,final_test_1_scale_left,final_test_1_scale_right)
    VariableComponent final_test_1_input
      startRoutineValue = input
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    TextComponent final_test_1_scale_instr
      letterHeight = 0.02
      pos = (-0.65,0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text = Enter the labels of item in the boxes
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    TextComponent final_test_1_ans_instr
      letterHeight = 0.03
      pos = (-0.25, -0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text = Enter your answer like this (X,X,X,X,X,X,X,X, ... ,X)
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    TextComponent final_test_1_instr
      letterHeight = 0.03
      pos = (0.65, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
      wrapWidth = 0.4
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      text:
        Use the scale to put the fruits in groups of two. Sort them lightest first within the group!

        Don't give up and try your best to write the fruit labels down in correct order.
    ButtonComponent final_test_1_btn
      bold = True
      color = black
      fillColor = white
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.5, -0.35)
      size = [0.24,0.1]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 300.0
      text = Submit
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    TextboxComponent final_test_1_scale_right
      anchor = top-center
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.03
      pos = (-0.55, 0.4)
      size = (0.1,0.07)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    TextboxComponent final_test_1_scale_left
      anchor = top-center
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.03
      pos = (-0.75, 0.4)
      size = (0.1, 0.07)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    TextboxComponent final_test_1_compare
      anchor = top-center
      bold = False
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.03
      pos = (-0.65, -0.02)
      size = (0.16,0.07)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text = Compare
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    TextboxComponent final_test_1_res
      anchor = top-center
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.05
      pos = (-0.25, -0.3)
      size = (0.7,0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent final_test_1_sep
      image = materials/merge_sort/demo_imgs/white_BG.png
      pos = (0, -0.15)
      size = (1.5,0.005)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent final_test_1
      image [set every repeat] = $img_path
      pos = (0, 0.2)
      size = (0.8, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent final_test_1_scale
      image = $scaleEqPath
      pos = (-0.65, 0.15)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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  Routine FINAL_TEST_2
    CodeComponent final_test_2_setup
      Code Type = Auto->JS
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      Begin Routine:
        # Begin Routine

        items = []

        movingItem = None
        (x, y) = final_test_2_board.pos
        (w,h) = final_test_2_board.size
        top = y+h/2
        bot = y-h/2
        left = x-w/2
        right = x+w/2

        cntCompared = 0
      Each Frame:
        # Each Frame

        if items == []:
            items = enableImageComponents(FINAL_TEST_2Components,final_test_2_input,final_test_2_path_base)

        for item in items:
            if mouse.isPressedIn(item) and movingItem is None:
                movingItem = item

        movingItem = moveItem(mouse, movingItem)

        if mouse.isPressedIn(final_test_2_compare):
            compare(final_test_2_scale,final_test_2_input,final_test_2_scale_instr,final_test_2_scale_left,final_test_2_scale_right)
    VariableComponent final_test_2_path_base
      startRoutineValue = img_path_base
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    VariableComponent final_test_2_input
      startRoutineValue = input
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    TextComponent final_test_2_ans_instr
      letterHeight = 0.03
      pos = (-0.25, -0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text = Enter your answer like this (X,X,X,X,X,X,X,X, ... ,X)
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    TextComponent final_test_2_scale_instr
      letterHeight = 0.02
      pos = (-0.65,0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text = Enter the labels of item in the boxes
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    TextComponent final_test_2_instr
      letterHeight = 0.03
      pos = (0.65, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
      wrapWidth = 0.4
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      text:
        In this room, you have to sort a set of fruits from lightest to heaviest. You can still use the scale to for weighting fruits and the sketchboard to move things around.

        Please try your best to record the fruit labels down in correct order.
    ButtonComponent final_test_2_btn
      bold = True
      color = black
      fillColor = white
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.5, -0.35)
      size = [0.24,0.1]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 300.0
      text = Submit
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    TextboxComponent final_test_2_scale_right
      anchor = top-center
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.03
      pos = (-0.55, 0.4)
      size = (0.1,0.07)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    TextboxComponent final_test_2_scale_left
      anchor = top-center
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.03
      pos = (-0.75, 0.4)
      size = (0.1, 0.07)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    TextboxComponent final_test_2_compare
      anchor = top-center
      bold = False
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.03
      pos = (-0.65, -0.02)
      size = (0.16,0.07)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text = Compare
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    TextboxComponent final_test_2_res
      anchor = top-center
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.05
      pos = (-0.25, -0.3)
      size = (0.7,0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent final_test_2_sep
      image = materials/merge_sort/demo_imgs/white_BG.png
      pos = (0, -0.15)
      size = (1.5,0.005)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent final_test_2_board
      image [set every repeat] = materials/merge_sort/demo_imgs/white_BG.png
      pos = (0, 0.2)
      size = (0.8, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent final_test_2_scale
      image = $scaleEqPath
      pos = (-0.65, 0.15)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent final_test_2_ex_1
      pos [set every repeat] = (-0.20, 0.3)
      size = (0.06, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent final_test_2_ex_2
      pos [set every repeat] = (-0.15, 0.3)
      size = (0.06, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent final_test_2_ex_3
      pos [set every repeat] = (-0.10, 0.3)
      size = (0.06, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent final_test_2_ex_4
      pos [set every repeat] = (-0.05, 0.3)
      size = (0.06, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent final_test_2_ex_5
      pos [set every repeat] = (0, 0.3)
      size = (0.06, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent final_test_2_ex_6
      pos [set every repeat] = (0.05, 0.3)
      size = (0.06, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent final_test_2_ex_7
      pos [set every repeat] = (0.1, 0.3)
      size = (0.06,0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent final_test_2_ex_8
      pos [set every repeat] = (0.10,0.3)
      size = (0.06, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent final_test_2_ex_9
      pos [set every repeat] = (0.15, 0.3)
      size = (0.06, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent final_test_2_ex_10
      pos [set every repeat] = (0.20, 0.3)
      size = (0.06, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent final_test_2_ex_11
      pos [set every repeat] = (0.25, 0.3)
      size = (0.06, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent final_test_2_ex_12
      pos [set every repeat] = (-0.25, 0.3)
      size = (0.06, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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  Routine FINAL_TEST_INTRO
    TextComponent intro_text_4
      letterHeight = 0.03
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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      text:
        You have done a great job! Here are some final challenges!

        Recall what you have learned and give your best to answer these questions!
    ButtonComponent intro_btn_4
      bold = True
      color = black
      fillColor = white
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.4)
      size = [0.30,0.1]
      startVal [time (s)] = 0
      stopVal [duration (s)] = 300.0
      text = Continue
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    ImageComponent alice_3
      image = materials/merge_sort/demo_imgs/alice.png
      pos = (-0.2, 0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent bob_3
      image = materials/merge_sort/demo_imgs/bob.png
      pos = (0.2, 0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent door
      image = materials/merge_sort/demo_imgs/door.png
      pos = (-0.4, 0.2)
      size = (0.15, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
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    ImageComponent door_5
      image = materials/merge_sort/demo_imgs/door.png
      pos = (0.4, 0.2)
      size = (0.15, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
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  Routine DEBRIEF
    TextComponent intro_text_5
      letterHeight = 0.03
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text = TBC
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    ButtonComponent intro_btn_5
      bold = True
      color = black
      fillColor = white
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.4)
      size = [0.30,0.1]
      startVal [time (s)] = 0
      stopVal [duration (s)] = 300.0
      text = Exit
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Flow
  Routine INTRO
  Routine MERGE_INTRO
  LoopInitiator TRAIN_1 loopType="TrialHandler"
    conditions = [OrderedDict([('img_path', 'materials/merge_sort/demo_imgs/merge_train_ex_1.png'), ('input', [7, 8, 10, 15, 20, 2, 3, 12, 17, 18]), ('mc_path_1', 'materials/merge_sort/demo_imgs/merge_train_ex_1_correct.png'), ('mc_path_2', 'materials/merge_sort/demo_imgs/merge_train_ex_1_wrong.png'), ('expl_path', 'materials/merge_sort/demo_imgs/merge_train_ex_1_expl.png')])]
    conditionsFile = materials/merge_train_cond.csv
    loopType = sequential
    nReps = 1
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    Routine MERGE_TRAIN
    Routine MERGE_TRAIN_EXPL
  LoopTerminator TRAIN_1
  LoopInitiator TEST_1 loopType="TrialHandler"
    conditionsFile = materials/merge_test_cond.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('img_path', 'materials/merge_sort/demo_imgs/merge_test_ex_1.png'), ('input', [6, 2])]),
      OrderedDict([('img_path', 'materials/merge_sort/demo_imgs/merge_test_ex_2.png'), ('input', [5, 7, 8, 2, 3, 10])])]
    Routine MERGE_TEST
  LoopTerminator TEST_1
  Routine SORT_INTRO
  LoopInitiator TRAIN_2 loopType="TrialHandler"
    conditionsFile = materials/sort_train_cond.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('img_path_base', 'materials/merge_sort/demo_imgs/banana'), ('input', [3, 4, 6, 10]), ('mc_path_1', 'materials/merge_sort/demo_imgs/sort_train_ex_2_correct.png'), ('mc_path_2', 'materials/merge_sort/demo_imgs/sort_train_ex_2_wrong.png'), ('expl_path', 'materials/merge_sort/demo_imgs/sort_train_ex_2.png')]),
      OrderedDict([('img_path_base', 'materials/merge_sort/demo_imgs/apple'), ('input', [1, 4, 5, 23, 34, 40, 71]), ('mc_path_1', 'materials/merge_sort/demo_imgs/sort_train_ex_2_correct.png'), ('mc_path_2', 'materials/merge_sort/demo_imgs/sort_train_ex_2_wrong.png'), ('expl_path', 'materials/merge_sort/demo_imgs/sort_train_ex_2.png')])]
    Routine SORT_TRAIN
    Routine SORT_TRAIN_EXPL
  LoopTerminator TRAIN_2
  LoopInitiator TEST_2 loopType="TrialHandler"
    conditions = [OrderedDict([('img_path_base', 'materials/merge_sort/demo_imgs/apple'), ('input', [3, 4, 6, 1, 2, 8, 10])])]
    conditionsFile = materials/sort_test_cond.csv
    loopType = sequential
    nReps = 1
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    Routine SORT_TEST
  LoopTerminator TEST_2
  Routine FINAL_TEST_INTRO
  LoopInitiator TEST_3 loopType="TrialHandler"
    conditionsFile = materials/merge_final_test_cond.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('img_path', 'materials/merge_sort/demo_imgs/merge_test_ex_2.png'), ('input', [5, 7, 8, 2, 3, 10])]),
      OrderedDict([('img_path', 'materials/merge_sort/demo_imgs/merge_test_ex_3.png'), ('input', [1, 3, 5, 7, 9, 11, 2, 4, 6, 8, 10, 12])])]
    Routine FINAL_TEST_1
  LoopTerminator TEST_3
  LoopInitiator TEST_4 loopType="TrialHandler"
    conditionsFile = materials/sort_final_test_cond.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('img_path_base', 'materials/merge_sort/demo_imgs/melon'), ('input', [9, 8, 7, 6, 5, 4])]),
      OrderedDict([('img_path_base', 'materials/merge_sort/demo_imgs/apple'), ('input', [3, 4, 6, 1, 2, 8, 10, 17, 21, 7, 9, 15])])]
    Routine FINAL_TEST_2
  LoopTerminator TEST_4
  Routine DEBRIEF
